<?xml version="1.0" encoding="UTF-8" standalone="no"?>
<batch mzmine_version="4.8.30">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_8.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_7.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_6.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_5.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_4.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_3.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_2.mzML</file>
            <file>/Volumes/SharedFolder/Vincent_Vincent/bifidos_5ASA_BAs/mzML/sixmix_1.mzML</file>
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        </parameter>
        <parameter name="Vendor data options">
            <parameter name="Try vendor centroiding">true</parameter>
            <parameter name="Remove calibrant signals (Thermo)">true</parameter>
            <parameter name="Apply lockmass on import (Waters)" selected="true">
                <parameter name="Positive lockmass">556.276575</parameter>
                <parameter name="Negative lockmass">554.262022</parameter>
            </parameter>
            <parameter name="Waters MassLynx data import">native</parameter>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">3.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">true</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">2.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.3</min>
                <max>30.0</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">10000.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" module_name="Smoothing" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time width (scans)" selected="true">5</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.05</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.6</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.51</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" module_name="13C isotope filter (formerly: isotope grouper)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" module_name="Isotopic peaks finder" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" module_name="Join aligner" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" module_name="Duplicate peak filter" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>7.5E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.035</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" module_name="Correlation grouping (metaCorrelate)" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="SECONDS">1.0</parameter>
        <parameter name="Minimum feature height">0.0</parameter>
        <parameter name="Intensity threshold for correlation">5.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">1.0</parameter>
            <parameter name="Exclude gap-filled features">true</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Minimum samples">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">false</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" module_name="Ion identity networking" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-17.026549" mol_formula="NH3" name="NH3" type="NEUTRAL_LOSS"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-27.994915" mol_formula="CO" name="CO" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-43.989829" mol_formula="CO2" name="CO2" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-28.031301" mol_formula="C2H4" name="C2H4" type="NEUTRAL_LOSS"/>
                </modification_type>
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            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_network_graphml.NetworkGraphMlExportModule" module_name="Export spectral networks to graphml (FBMN/IIMN)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_networks.graphml</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" module_name="Export to CSV file (modular)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_full_feature_table.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" module_name="Export molecular networking files (e.g., GNPS, FBMN, IIMN, MetGem)" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_iimn_fbmn.mgf</current_file>
        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">single_merged_scan</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.002</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" module_name="Export for SIRIUS" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_sirius.mgf</current_file>
        </parameter>
        <parameter name="Intensity normalization" scientific="true">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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            <module name="input_scans">
                <parameter name="Select input scans">all_scans</parameter>
            </module>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_compoundAnnotations_csv.CompoundAnnotationsCSVExportModule" module_name="Export all annotations to CSV file" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_annotations.csv</current_file>
        </parameter>
        <parameter name="Top N per method">10</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.batchmode.autosave.AutoSaveBatchModule" module_name="Save current batch" parameter_version="1">
        <parameter name="Save batch to" selected="true">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_batch.mzbatch</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv_legacy.LegacyCSVExportModule" module_name="Export CSV (legacy MZmine 2)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/vincentlamoureux/Library/CloudStorage/OneDrive-UniversityofCalifornia,SanDiegoHealth/Postdoc_UCSD/Postdoc_projects/Bifidos_5ASA_BAs_cultures/mzmine_output/bifidos_quant_mzmine.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Feature FWHM</item>
            <item>Feature RT</item>
            <item>Peak area</item>
            <item>Peak height</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
